<PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="PlusServer: NDI Polaris tracker with passive markers and BK OEM" 
      Description="Broadcasting tool tracking and video data through OpenIGTLink" />
    <Device 
      Id="VideoDevice"
      Type="BkProFocusOem"
      OemPort="7915"
      ScannerAddress="10.0.0.1"
      OfflineTestingFilePath="C:/Research/fCal/fCal_OfflineTesting"
      AcquisitionRate="30"
      LocalTimeOffsetSec="0">
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF" ImageType="BRIGHTNESS" ClipRectangleOrigin="225 170"  ClipRectangleSize="469 740" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video"  />
      </OutputChannels>
    </Device>

    <Device
      Id="TrackerDevice"
      Type="PolarisTracker"
      ToolReferenceFrame="Tracker" 
      SerialPort="1">
      <DataSources>
        <DataSource Type="Tool" Id="Tool" RomFile="NdiToolDefinitions/y_probe.rom"  />
        <DataSource Type="Tool" Id="Stylus" RomFile="NdiToolDefinitions/cross_probe.rom"  />
        <!-- <DataSource Type="Tool" Id="Reference" RomFile="NdiToolDefinitions/cross_probe.rom"  /> -->
      </DataSources>
      <InputChannels>
        <InputChannel Id="VideoStream"  />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackerStream" >
          <DataSource Id="Tool"/>
          <DataSource Id="Stylus"/>
          <DataSource Id="Reference"/>
        </OutputChannel>
      </OutputChannels>
    </Device>
    <Device 
      Id="TrackedVideoDevice" 
      Type="VirtualMixer" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream"/>
      </OutputChannels>
    </Device>
    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.igs.mha"
      EnableCapturingOnStart="FALSE" >
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
    </Device>  
  </DataCollection>

  <CoordinateDefinitions>
    <Transform From="StylusTip" To="Stylus"
      Matrix="
        0.884771 0.16043 0.437541 -11.3933 
        -0.44352 0.578114 0.68489 107.311 
        -0.143072 -0.800029 0.582653 -1310.57 
        0 0 0 1 "
       Error="0.554951" Date="012617_105449" />
    <Transform From="Image" To="Reference"
      Matrix="
        1 0.0 0.0 0.0
        0.0 1 0.0 0.0
        0.0 0.0 1 0.0        
        0 0 0 1" />
  </CoordinateDefinitions>

  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    SendValidTransformsOnly="true" 
    OutputChannelId="VideoStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Image" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>


  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18945" 
    SendValidTransformsOnly="true" 
    OutputChannelId="TrackerStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <!-- <Transform Name="StylusTipToReference" /> -->
        <!-- <Transform Name="ToolToReference" /> -->
        <Transform Name="ToolToTracker" />
        <Transform Name="StylusToTracker" />
        <!-- <Transform Name="ReferenceToTracker" /> -->
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>