<PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="2024: and BK OEM (5cm)" 
      Description="Record video data through fCal (depth 5cm)" />
    <Device 
      Id="VideoDevice"
      Type="BkProFocusOem"
      OemPort="7915"
      ScannerAddress="10.0.0.1"
      OfflineTestingFilePath="C:/Research/fCal/fCal_OfflineTesting"
      AcquisitionRate="30"
      LocalTimeOffsetSec="0">
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF" ImageType="BRIGHTNESS" ClipRectangleOrigin="80  169"  ClipRectangleSize="698 727" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video"  />
      </OutputChannels>
    </Device>
    <Device 
      Id="TrackedVideoDevice" 
      Type="VirtualMixer" >
      <InputChannels>
        <InputChannel Id="VideoStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream"/>
      </OutputChannels>
    </Device>

    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.igs.mha"
      EnableCapturingOnStart="FALSE" >
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
    </Device>  

    <Device
      Id="VolumeReconstructorDevice"
      Type="VirtualVolumeReconstructor">
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
      <VolumeReconstruction
        ImageCoordinateFrame="Image" ReferenceCoordinateFrame="Tracker"
        Interpolation="LINEAR" Optimization="NONE" Compounding="On" FillHoles="Off" NumberOfThreads="2"
        OutputSpacing="0.01 0.01 0.01" >
		<HoleFilling>
          <HoleFillingElement Type="GAUSSIAN" Size="5" Stdev="0.6667" MinimumKnownVoxelsRatio="0.50001" />
          <HoleFillingElement Type="STICK" StickLengthLimit="9" NumberOfSticksToUse="1" />
         </HoleFilling>
	   </VolumeReconstruction>
    </Device>
  </DataCollection>

  <CoordinateDefinitions>
    <Transform From="StylusTip" To="Stylus"
      Matrix="
      1 0 0 -176.404 
      0 -1 0 -0.754891 
      0 0 -1 -18.8071 
      0 0 0 1"
      Error="0.38894" Date="20220918_1026" />
    <Transform From="Image" To="Reference"
      Matrix="
        1 0.0 0.0 0.0
        0.0 1 0.0 0.0
        0.0 0.0 1 0.0        
        0 0 0 1" />
    <Transform From="Image" To="Probe"
      Matrix="
        -0.00325536	0.0657721	-0.000994324	116.998
        -0.0679649	-0.00278315	0.00189849	21.6799
        0.00187977	0.00105623	0.0669198	-12.0548
        0	0	0	1"
       Error="1.0051" Date="011525_163035" />
  </CoordinateDefinitions>

<!-- 
  <Rendering WorldCoordinateFrame="Tracker" DisplayedImageOrientation="MF" >
    <DisplayableObject Type="Image" ObjectCoordinateFrame="Image" Id="LiveImage"/>
  </Rendering> --> 

  <fCal
    ImageDisplayableObjectId="LiveImage"
    MaxTimeSpentWithProcessingMs="70"
    TemporalCalibrationDurationSec="10"
    FixedChannelId="VideoStream" 
    FixedSourceId="Video"
    MovingChannelId="TrackerStream"
    MovingSourceId="ProbeToTracker"
    DefaultSelectedChannelId="TrackedVideoStream" 
     />

  
  <vtkTemporalCalibrationAlgo

    />

</PlusConfiguration>